//Handy tools for multichannel images visualization and multiple opened images handling
//1.0 030221
//kevin.terretaz@gmail.com

requires("1.53c");  // minimal version for extended hex icon feature 

/*----------------------------------------------------------------------------------------------------------------------
About menu
----------------------------------------------------------------------------------------------------------------------*/
var AboutCmds = newMenu("About Menu Tool",
	newArray("About this toolset","Keyboard shortcuts cheat sheet"));
macro"About Menu Tool - B31C000T2e20?"{
	cmd = getArgument();
	if (cmd=="Splitview ([S] key)") run("Splitview");
	else run(cmd);
}

/*----------------------------------------------------------------------------------------------------------------------
Reset the contrast of the active channel between the min and max of all slices, not just the active one.
----------------------------------------------------------------------------------------------------------------------*/
var first_click = true  //to show help once per session
macro "Reset contrast Action Tool-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" {
	if (first_click == true){
	Dialog.createNonBlocking("First click message");
	Dialog.addMessage("This macro resets the min and max based on the entire stack\n"+
		"to facilitate the contrast adjustment of Z stacks and time-lapses:\n"+
		"So you can navigate through slices without signal saturation.\n"+
		"Tip : if you have annoying bright spots on your stack,\n"+
		"draw a ROI on your signal of interest before running this tool.",11);
	Dialog.show();
	first_click = false;
	Reset_contrast();
	}
	else Reset_contrast();
}

//firstclick = call("ij.Prefs.get","autocontrast.firstclick",true)
//call("ij.Prefs.set","autocontrast.firstclick",false)


/*----------------------------------------------------------------------------------------------------------------------
Right click on any image window to open this menu.
Same popup menu than the original, plus the "Set LUTs" and "Add note in info" macros. Cutomizable.
----------------------------------------------------------------------------------------------------------------------*/
var pmCmds = newMenu("Popup Menu",
	newArray("Set LUTs", "Auto-contrast on all channels", "Rename...", "Duplicate...", "Original Scale","Scale to Fit",
		"Add note in info","-","Record...", "Capture Screen ", "Monitor Memory...",
		"Find Commands...", "Control Panel...", "Startup Macros...", "Search..."));
macro "Popup Menu" {
	cmd = getArgument();
	if (cmd!="-") run(cmd);
}

/*----------------------------------------------------------------------------------------------------------------------
Menu for Splitview tools and help
----------------------------------------------------------------------------------------------------------------------*/
var zCmds = newMenu("SplitView tools Menu Tool",
	newArray("Splitview ([S] key)","Grayscale Splitview (with color composite)","About Splitview"));
macro"SplitView tools Menu Tool - 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"{
	cmd = getArgument();
	if (cmd=="Splitview ([S] key)") run("Splitview");
	else run(cmd);
}

/*----------------------------------------------------------------------------------------------------------------------
This menu is for macro tools that acts on all opened images
----------------------------------------------------------------------------------------------------------------------*/
var yCmds = newMenu("All opened images tools Menu Tool",
	newArray("Reset all contrasts","Set all LUTs","Maximum Z project all","Save all"));
macro"All opened images tools Menu Tool - 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"{
	cmd = getArgument();
	if (cmd!="-") run(cmd);
}


/*
//Built-in Stack and LUT menus
 macro "Stacks Menu Built-in Tool" {}
 macro "LUT Menu Built-in Tool" {}
*/

/*----------------------------------------------------------------------------------------------------------------------
For multichannel visualization, 5 channel max
This macro will generate a montage of composite and splited channels in one RGB Image
You can still navigate through slices or frames. 
Note : the Splitview image size can be heavy on big hyperstacks due to RGB conversion
Advice : draw a selection before running Spliview, the produced montage will be croped
----------------------------------------------------------------------------------------------------------------------*/
macro "Splitview" {
	setBatchMode(true);
	getDimensions(w, h, channels, slices, frames);
	title = getTitle();
	if (channels == 1) exit("only one channel");
	if (channels > 5) exit("5 channels max");
	run("Duplicate...", "title=image duplicate");
	if ((slices > 1) && (frames == 1)) {//necessary trick for easy RGB conversion of Zstacks and timelapses
		frames = slices;
		slices = 1;
		Stack.setDimensions(channels, slices, frames); } 
	run("Duplicate...", "title=split duplicate");
	run("Split Channels");
	selectWindow("image");
	run("RGB Color", "frames");
	rename("overlay");
	close("image");
	for (i = 1; i <= channels; i++) {
		selectWindow("C"+i+"-split");
		run("RGB Color", "slices"); }
	if (channels == 2) {
		run("Combine...", "stack1=overlay stack2=C1-split");
		run("Combine...", "stack1=[Combined Stacks] stack2=C2-split"); } //combine horizontaly
	if (channels == 3) {
		run("Combine...", "stack1=overlay stack2=C1-split");
		run("Combine...", "stack1=C2-split stack2=C3-split");
		rename("Combined2");
		run("Combine...", "stack1=[Combined Stacks] stack2=Combined2 combine");	} //last 'combine' = verticaly
	if (channels >= 4) { 
		run("Combine...", "stack1=C1-split stack2=C2-split");
		run("Combine...", "stack1=C3-split stack2=C4-split");
		rename("Combined2");
		run("Combine...", "stack1=[Combined Stacks] stack2=Combined2 combine"); }
	if (channels == 4) run("Combine...", "stack1=overlay stack2=[Combined Stacks]");
	if (channels == 5) {
		rename("Combined3");
		run("Combine...", "stack1=overlay stack2=C5-split combine");
		run("Combine...", "stack1=[Combined Stacks] stack2=Combined3"); }
	rename(title + " Splitview");
	setBatchMode("exit and display");
}


macro "Grayscale Splitview (with color composite)" {
	setBatchMode(true);
	getDimensions(w, h, channels, slices, frames);
	title = getTitle();
	if (channels == 1) exit("only one channel");
	if (channels > 5) exit("5 channels max");
	run("Duplicate...", "title=image duplicate");
	if ((slices > 1) && (frames == 1)) {
		frames = slices;
		slices = 1;
		Stack.setDimensions(channels, slices, frames); }
	run("Duplicate...", "title=split duplicate");
	run("Split Channels");
	selectWindow("image");
	run("RGB Color", "frames");
	rename("overlay");
	close("image");
	for (i = 1; i <= channels; i++) {
	selectWindow("C"+i+"-split");
	run("Grays");
	run("RGB Color", "slices"); }
		if (channels == 2) {
			run("Combine...", "stack1=overlay stack2=C1-split");
			run("Combine...", "stack1=[Combined Stacks] stack2=C2-split"); }
		if (channels == 3) {
			run("Combine...", "stack1=overlay stack2=C1-split");
			run("Combine...", "stack1=C2-split stack2=C3-split");
			rename("Combined2");
			run("Combine...", "stack1=[Combined Stacks] stack2=Combined2");	}
		if (channels >= 4) {
			run("Combine...", "stack1=C1-split stack2=C2-split");
			run("Combine...", "stack1=C3-split stack2=C4-split");
			rename("Combined2");
			run("Combine...", "stack1=[Combined Stacks] stack2=Combined2"); }
		if (channels == 4) run("Combine...", "stack1=overlay stack2=[Combined Stacks]");
		if (channels == 5) {
			rename("Combined3");
			run("Combine...", "stack1=Combined3 stack2=C5-split");
			run("Combine...", "stack1=overlay stack2=[Combined Stacks]"); }
	rename(title + " Splitview");
	setBatchMode("exit and display");
}

macro "About Splitview" {
	showMessage("About Splitview", "Splitview is a visualisation tool for multichannel images with up to 5 channels:\n"
		+"This macro will generate a montage of composite and separated channels in one RGB Image.\n"
		+"You can still navigate through slices or frames.\n \n"
		+"Note: the Splitview image size can be heavy on big hyperstacks due to RGB conversion.\n"
		+"Advice: draw a selection before running Spliview, the produced montage will be croped.");
}

//----------------------------------------------------------------------------------------------------------------------
//----------------------------------------------------------------------------------------------------------------------

/*----------------------------------------------------------------------------------------------------------------------
"Set LUTs" applies the chosen LUTs from left to right. Up to five channels.
"Set all LUTs" does the same with all opened images. They don't need to have the same number of channels.
----------------------------------------------------------------------------------------------------------------------*/
macro "Set LUTs"{
	Get_LUTs();
	Set_LUTs();
}
macro "Set all LUTs"{
	Get_LUTs();
	for (i = 0; i < nImages; i++) {
		selectImage(i+1);
		Set_LUTs();
	}
}
/*----------------------------------------------------------------------------------------------------------------------
functions for Set LUTs macros
----------------------------------------------------------------------------------------------------------------------*/
var chosen_LUTs = newArray("Cyan","Magenta","Yellow","Grays","Green");

function Get_LUTs(){//Add you favorite or personnal LUTs in the next line list to see them in dialog.
	LUT_list = newArray("Cyan","Magenta","Yellow","Grays","Red","Green","Blue");
	Dialog.create("Set all LUTs");
	Dialog.addChoice("LUT 1", LUT_list, "Cyan");
	Dialog.addChoice("LUT 2", LUT_list, "Magenta");
	Dialog.addChoice("LUT 3", LUT_list, "Yellow");
	Dialog.addChoice("LUT 4", LUT_list, "Grays");
	Dialog.addChoice("LUT 5", LUT_list, "Green");
	Dialog.show();
	chosen_LUTs = newArray(Dialog.getChoice(), Dialog.getChoice(), Dialog.getChoice(), Dialog.getChoice(),Dialog.getChoice());
}
function Set_LUTs(){
	getDimensions(width, height, channels, slices, frames);
	if(channels > 1){
		Stack.setDisplayMode("composite");
		for (loop = 1; loop <= channels; loop++) {
		Stack.setChannel(loop);
		run(chosen_LUTs[loop-1]);	}
	}
	else {run(chosen_LUTs[0]);	} //need the "if / else" because Stack.setChannel doesn't work on single dimension images
}

//----------------------------------------------------------------------------------------------------------------------
//----------------------------------------------------------------------------------------------------------------------

/*----------------------------------------------------------------------------------------------------------------------
function for Reset contrast macros :
Reset the contrast window between min and max on active channel
----------------------------------------------------------------------------------------------------------------------*/
function Reset_contrast() { 
	setBatchMode(true);
	id = getImageID();
	getDimensions(width, height, channels, slices, frames);
	if (slices*frames*channels == 1) {
		getStatistics(area, mean, min, max, std, histogram);
	}
	else if (slices*frames == 1 && channels>1)	{
		Stack.getPosition(channel, slice, frame);
		run("Duplicate...", "title=A duplicate channels=&channel");//duplicate only the active channel.
		getStatistics(area, mean, min, max, std, histogram);
	}
	else {
		Stack.getPosition(channel, slice, frame);
		run("Duplicate...", "title=A duplicate channels=&channel");
		Stack.getStatistics(voxelCount, mean, min, max, stdDev);
	}
	selectImage(id);
	setMinAndMax(min, max);
	close("A");
	setBatchMode("exit and display");
}
/*----------------------------------------------------------------------------------------------------------------------
the getStatistics function only works on single dimension image
the Stack.getStatistics get the min max of entire stacks, but when multiple channels it returns a min max based on all dimensions.
That's why this macro function had to be adapted to the 3 cases of,
 1 slice / 1 color ; 1slice / multiple colors ; multiple slices / multiple color 
----------------------------------------------------------------------------------------------------------------------*/

/*----------------------------------------------------------------------------------------------------------------------
Reset the contrast window between min and max on all individual channels
----------------------------------------------------------------------------------------------------------------------*/
macro "Auto-contrast on all channels" {
	    getDimensions(width, height, channels, slices, frames);
		if(channels>1)	{
			for (A = 1; A <= channels; A++) {
			Stack.setChannel(A);
			Reset_contrast();
			}
		}
		else {Reset_contrast();}
}

/*----------------------------------------------------------------------------------------------------------------------
Reset the contrast window between min and max on all opened images, for all stacks and individual channels (fairly quickly)
----------------------------------------------------------------------------------------------------------------------*/
macro "Reset all contrasts" {
	for (i=0;i<nImages;i++) {
	    selectImage(i+1);
	    run("Auto-contrast on all channels");
	}
}

//----------------------------------------------------------------------------------------------------------------------
//----------------------------------------------------------------------------------------------------------------------

/*----------------------------------------------------------------------------------------------------------------------
Saves all opened images as Tiff in selected directory, but be carefull:
Any image in the directory with same name will be replaced without warning!
----------------------------------------------------------------------------------------------------------------------*/
macro "Save all" { 
	dir = getDirectory("Choose a directory");
	for (i=0;i<nImages;i++) {
        selectImage(i+1);
        title = getTitle;
        saveAs("tiff", dir+title);
        print(title + " saved");
	} 
}

/*----------------------------------------------------------------------------------------------------------------------
This macro will run a maximal intensity projection on all opended images, close the primary stacks and run "Tile".
Can be handy to get a quick overview of multiple hyperstacks.
----------------------------------------------------------------------------------------------------------------------*/
macro "Maximum Z project all" {
	setBatchMode(1);
	nIm = nImages;								//get number of opened images
	opened_imagesID = newArray(nIm);
	for (a=0; a<nIm ; a++) {					//put images ID in the opened_imagesID array : easier to avoid loop errors after.(thanks Jerome)
		selectImage(a+1);
		opened_imagesID[a] = getImageID(); } 
	for (b=0; b<nIm; b++) {						//commands loop through the images ID array
		selectImage(opened_imagesID[b]);
		getDimensions(w, h, channels, slices, frames);
		if (channels*slices*frames!=1) run("Z Project...", "projection=[Max Intensity] all"); }
	for (c=0; c<nIm ; c++) {					//Close not projected images
		selectImage(opened_imagesID[c]);
		close(); }
	setBatchMode("exit and display");
	run("Tile");								//reorder images windows
}

/*----------------------------------------------------------------------------------------------------------------------
Add a line of text on top of the image "info" metadata.
The text is saved in image file.
----------------------------------------------------------------------------------------------------------------------*/
macro "Add note in info"{
A=getMetadata("Info");
Dialog.create("Add comment on top of info file([i] key)");
Dialog.addString("note :", "", 100);
Dialog.show();
Comment = Dialog.getString();
setMetadata("Info", Comment+'\n\n'+A);
run("Show Info...");
}


/*----------------------------------------------------------------------------------------------------------------------
numerical key shortcuts for most common LUTs, [n7] to [n9]remains for your favorites.
----------------------------------------------------------------------------------------------------------------------*/
macro "Gray [n1]"		{run("Grays");}
macro "Green [n2]"		{run("Green");}
macro "Red [n3]"		{run("Red");}
macro "Cyan [n4]"		{run("Cyan");}
macro "Magenta [n5]"	{run("Magenta");}
macro "Yellow [n6]"		{run("Yellow");}

//key shortcuts for what I think are frequently used commands with opened images. Plus some usefull tricks.

macro "auto [A]"					{run("Enhance Contrast", "saturated=0.3");} //almost same as "Auto" button in Brightness tool.

macro "Tile [E]"					{run("Tile");}

macro "Auto contrast all Ch [R]"	{run("Auto-contrast on all channels");} //sortcut for macro

macro "Auto contrast [r]"			{Reset_contrast();}

macro "sync [y]"					{run("Synchronize Windows");}

macro "Arrange [q]"					{run("Arrange Channels...");}

macro "Splitview [S]"				{run("Splitview");}

macro "Splitview [p]"				{run("Grayscale Splitview (with color composite)");}

macro "Split Channel[d]"			{run("Split Channels");}

macro "duplicate [D]"				{run("Duplicate...", "duplicate");}

macro "Merge [M]"					{run("Merge Channels...");}

macro "Z Project [g]"				{run("Z Project...");}

macro "Max [G]"						{run("Z Project...", "projection=[Max Intensity] all");}

macro "Save as tiff [T]"			{saveAs("Tiff");}

macro "composite switch [Q]" {//easy switch between Color and Composite mode on multichannel images.
	Stack.getDisplayMode(mode);
	if (mode == "color" || mode == "greyscale"){Stack.setDisplayMode("composite");} 
	else {Stack.setDisplayMode("color");}
}//thanks to Nick George!

//----------------------------------------------------------------------------------------------------------------------
//----------------------------------------------------------------------------------------------------------------------
//----------------------------------------------------------------------------------------------------------------------

macro "About this toolset" {
	Dialog.createNonBlocking("Visualization Toolset description");
	Dialog.addMessage("This toolset intends to facilitate visualization of multichannel images and stacks.\n"+
	"It provides handy tools for single images:\n"+
	"______________________________________________________________________________\n"+
	"* Splitview : menu icon or press [S] (colored) or [p] (grayscale).\n"+
	"            Creates a RGB montage of composite and splited channels.\n"+
	"            Grayscale splitview is a linear montage with overlay and grey channels.\n"+
	"            You can still navigate through slices or frames.\n"+
	"______________________________________________________________________________\n"+
	"* Set image LUTs : open popup menu (Right click on the image) and select 'Set LUTs':\n"+
	"            Applies all the chosen LUTs (false colors) to your multichannel image.\n"+
	"______________________________________________________________________________\n"+
	"* Auto-contrast min-max : Click on Contrast icon or [r]:\n"+
	"            Resets the contrast window of the active channel. For stacks, it is based\n"+
	"            on all slices, not just the displayed one.(Also works on a selected region of image).\n"+
	"            To Reset all channels at once, select in popup 'Reset all channels' or press [R]\n"+
	"______________________________________________________________________________\n"+
	"* A set of 4 tools for all opended images : in the 'All images menu icon':\n"+
	"           - Set all LUTs : \n"+
	"                    applies the chosen LUTs to all images.\n"+
	"           - Reset all contrasts : \n"+
	"                    Reset contrast of all individual channels and all opened images.\n"+
	"           - Maximum Z project all : \n"+
	"                    Run a maximal intensity projection on all opended stacks,\n"+
	"                    then close the stacks and run 'Tile' to see all windows.\n"+
	"                    Can be handy to get a quick overview of stacks content.\n"+
	"           - Save all : \n"+
	"                    Saves all opened images as Tiff in a specified directory.\n"+
	"                    Be carefull : it will erase files with similar names with no warning.\n"+
	"        ______________________________________________________________________________\n"+
	"* a handy macro shortcut :\n"+
	"	- [ Q ]   easy switch between Color and Composite mode on multichannel images.\n"+
	"______________________________________________________________________________\n"+
	"* A set of keyboard shortcuts for frequently used commands in Imagej\n"+
	"  All described in the cheat sheet of the ' ? ' menu.\n"+
	"  (Maintain ctrl (pc) or cmd (mac) key to access the built-in shortcuts of Imagej)\n"+" \n"+
	"Final note : The Visualization_Toolset.ijm file has been written in the most \n"+
	"readable way possible (well I did my best) in order to be easily customized or adjusted.\n"+
	"i.e. if you don't like keyboard shortcuts, you can delete them or change the [key]",12);
	Dialog.show();
}

macro "Keyboard shortcuts cheat sheet" {
	Dialog.createNonBlocking("keyboard shortcuts");
	Dialog.addMessage("____________________________________\n"+
	"* Macro shortcut :\n"+
	"[ Q ]___switch color and composite mode\n"+
	"[ R ]___Auto-contrast all channels\n"+
	"[ r ]___Auto-contrast active channel\n"+
	"[ A ]___Enhance Contrast, saturated=0.3 :\n"+
	"               (only based on displayed slice)\n"+
	"[ S ]___Colored splitview\n"+
	"[ p ]___Grayscale splitview\n"+
	"____________________________________\n"+
	"* Frequently used commands in Imagej: \n"+
	"[ E ]___Tile : reorder windows to see all\n"+
	"[ y ]___Open the tool 'synchronize windows'\n"+
	"[ q ]___Arrange channels order\n"+
	"[ d ]___Split Channels\n"+
	"[ M ]___Merge channels\n"+
	"[ D ]___Duplicate (all dimensions)\n"+
	"[ g ]___Z projection dialog \n"+
	"[ G ]___Maximal intensity projection\n"+
	"[ T ]___Save as Tiff",12);
	Dialog.show();
}







